CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load each channel (or stain) as a separate image.  If you have a color image composed of different stains, youâx80x99ll need to specify the image type as âx80x98Color imageâx80x99 and then use a ColorToGray module in the Analysis modula panel to separate the incoming image into its component channels.', '', 'In the example pipeline, we call the two images OrigStain1 and OrigStain2.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c4")
    Name to assign these images:DNA_BLUE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c3")
    Name to assign these images:TUNNEL_GREEN
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DNA_BLUE
    Conversion method:Combine
    Image type:RGB
    Name the output image:DNA_GS
    Relative weight of the red channel:0
    Relative weight of the green channel:0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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
    Select the input image:TUNNEL_GREEN
    Conversion method:Combine
    Image type:RGB
    Name the output image:TUNNEL_GS
    Relative weight of the red channel:0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:0
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
Align:[module_num:7|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notes:['(Optional) Since accurate colocalization requires accurate positioning of the features in both images, it is sometimes worth using this module to align the images.', '', 'If aligning the images, it is important to remember that there needs to be sufficient overlap in image features, other than the features suspected of overlapping, in order to align them. For example, attempting to align two images in which there is little to no colocalization will probably result in poor alignment. ']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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:DNA_GS
    Name the first output image:DNA_Align
    Select the second input image:TUNNEL_GS
    Name the second output image:TUNNEL_Align

MeasureColocalization:[module_num:8|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notes:['The Measure Correlation module measures both the correlation of Stain1 and Stain2 across the entire image.  The overall image correlation can give a general sense of how colocalized the features within the images are.', '', 'The correlation measurement is the normalized covariance (covariance divided by the product of standard deviation of pixels in each image). Correlation ranges from -1 (complete inverse correlation) to +1 (complete correlation). Thus, the closer to one the correlation measurement is, the more correlated the two images are and the higher the amount of colocalization.', '', 'Note that if you are not interested in object-based calculations, you could stop here and remove the modules up to the ExportToSpreadsheet module.']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
    Select images to measure:DNA_Align, TUNNEL_Align
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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    Method for Costes thresholding:Accurate

IdentifyPrimaryObjects:[module_num:9|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notes:['Similarly, correlation measurements for individual objects can also be obtained. However, to determine colocalization on per-object basis, the objects within the image must be identified.  We first segment the image features into objects, then make comparisons between the individual objects in the channels.', '', 'The input image is selected as Stain1, with the output objects named Objects1. The typical diameter is set as [3,15] for the min/max size we expect the objects to be. We chose to discard small and large objects, which tend to be spurious, and discard those objects at the border because we will be making area-based measurements.', '', 'The chosen thresholding method can greatly affect segmentation.  Here, you want to select a method that will accurately identify the protein of interest as foreground.  Depending on the background level and properties of the stain, you may need to try several different methods and corresponding settings to obtain good segmentation.  Please see the help for IdentifyPrimaryObjects for more information on the thresholding methods available.', '', 'Settings to distinguish clumped objects are of importance for per-object measures of co-localization.  For example, if you wish to measure co-localization only in the nuclei or cytoplasm, each sub cellular compartment must be properly segmented to provide an accurate measurement.  You may need to adjust various settings to get good segmentation of clumpy nuclei. ']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
    Select the input image:DNA_Align
    Name the primary objects to be identified:DNA_Obj
    Typical diameter of objects, in pixel units (Min,Max):6,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:1
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.1
    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:10|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notes:['The settings are identical to the first IdentifyPrimaryObjects, but here we identify the nuclei from Stain 2.']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
    Select the input image:TUNNEL_Align
    Name the primary objects to be identified:TUNNEL_Obj
    Typical diameter of objects, in pixel units (Min,Max):3,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:1
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.04,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:11|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notes:['If we want to consider objects which touch or overlap each other are considered to be colocalized, this module establishes a âx80x98parent-childâx80x99 relationship between two sets of objects. A âx80x98parentâx80x99 object is one that touches, overlaps or encloses a âx80x98childâx80x99 object. Object2 objects that touch or overlap with an Object2 object are considered to be colocalized and will be assigned as a parent to a corresponding child.  All others have no children and are labeled accordingly.', '', 'In addition, the distance between object centroids may also be obtained with this module by enabling the âx80x98Calculate distances?âx80x99âx80x99 setting.']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
    Parent objects:DNA_Obj
    Child objects:TUNNEL_Obj
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
ClassifyObjects:[module_num:12|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notes:['The ClassifyObjects module categorizes objects into bins associated with a particular measurement.  In this case, the chosen measurement is the child count for Objects1. The value 0.5 is chosen as the measurement since we want to distinguish between colocalized objects with children (child count of 1 or greater) versus those without (child count of 0). ', '', 'The result of this module is an absolute count and percentage of objects that fall into the colocalized/non-colocalized bins, and an annotation to each Objects1 object as to whether it falls into a particular bin or not. This approach works well if you just want a yes/no readout per object.']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
    Make classification decision based on:Single measurement
    Hidden:1
    Hidden:1
    Select the object to be classified:DNA_Obj
    Select the measurement to classify by:Children_TUNNEL_Obj_Count
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.5
    Give each bin a name?:Yes
    Enter the bin names separated by commas:NotColocalized,Colocalized
    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Default Output Folder|None
    Rules or classifier file name:None
    Allow fuzzy feature matching?:No

FilterObjects:[module_num:13|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notes:['The FilterObjects module effectively does the same operation as Classify Objects, but rather than simply assigning a label to each object, FilterObjects removes all objects that do not pass a criterion. Using the same choice of measurement and cutoff as in Classify Objects, only those Objects1 objects which fall into the co-localized bin are retained. This feature is useful if you want to perform additional operations or measurements on the remaining objects. ', '', 'These two modules can also be used to perform the same operations on the ExpandedObjects1 object set.']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
    Select the objects to filter:DNA_Obj
    Name the output objects:ColocalizedObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_TUNNEL_Obj_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:14|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notes:['This module masks (i.e., âx80x98hidesâx80x99 from consideration) the pixels of the Objects1 object set which are in common with the Objects2 object set. The result of this operation is the colocalized area as a new object set, named ColocalizedRegions ']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
    Select objects to be masked:DNA_Obj
    Name the masked objects:ColocalizedRegion
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:TUNNEL_Obj
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureImageAreaOccupied:[module_num:15|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notes:['The MeasureImageAreaOccupied module measure various statistics associated with the area taken up by a feature in an image. In this case, we are concerned with Objects1 and ColocalizedRegion. The module counts all the pixels occupied by an given object set and adds them together for the total area occupied by each stained object']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
    Measure the area occupied by:Objects
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    Select object sets to measure:ColocalizedObjects, ColocalizedRegion, DNA_Obj, TUNNEL_Obj

CalculateMath:[module_num:16|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notes:['We divide the area occupied by ColocalizedRegion by the area occupied by Objects1 to get a per-image fraction.']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enabled:False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
    Name the output measurement:Stain1Colocalized
    Operation:Divide
    Select the numerator measurement type:Object
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    Select the numerator measurement:AreaOccupied_AreaOccupied_ColocalizedRegion
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Objects1
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:17|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notes:['This module is used to export the full set of measurements obtained by the pipeline. Measurements such as object counts, colocalization percentages and area fractions are saved to a per-image file (that is, one value per image); measurements such as colocalized/non-colocalized status and centroid distances are saved to a per-object file (one value per object).']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
